<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:OpenEphys.Sockets.Bonsai;assembly=OpenEphys.Sockets.Bonsai"
                 xmlns:p2="clr-namespace:Bonsai.OpenEphys;assembly=Bonsai.OpenEphys"
                 xmlns:p3="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateTcpServer">
          <p1:Name>TCP</p1:Name>
          <p1:Port>9001</p1:Port>
          <p1:Address>localhost</p1:Address>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:AcquisitionBoard">
          <p2:BoardLeds>true</p2:BoardLeds>
          <p2:BoardIndex>-1</p2:BoardIndex>
          <p2:BufferCount>256</p2:BufferCount>
          <p2:SampleRate>SampleRate30000Hz</p2:SampleRate>
          <p2:ExternalFastSettleEnabled>false</p2:ExternalFastSettleEnabled>
          <p2:LowerBandwidth>0.1</p2:LowerBandwidth>
          <p2:UpperBandwidth>7500</p2:UpperBandwidth>
          <p2:DspCutoffFrequency>1</p2:DspCutoffFrequency>
          <p2:DspEnabled>true</p2:DspEnabled>
          <p2:CableDelayA xsi:nil="true" />
          <p2:CableDelayB xsi:nil="true" />
          <p2:CableDelayC xsi:nil="true" />
          <p2:CableDelayD xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AmplifierData</Selector>
        <TypeMapping xsi:type="TypeMapping" TypeArguments="p3:Mat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>0</dsp:int>
            <dsp:int>1</dsp:int>
            <dsp:int>2</dsp:int>
            <dsp:int>3</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SendTcpData">
          <p1:Connection>TCP</p1:Connection>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>